load_file("nrngui.hoc")
/////////////////////////
//Simulation parameters//
////////////////////////
//tmax=150         
tmax=1000        
cvode.active(0)  //Fixed time step 
DT=0.025	

//////////////////////////
//MF stimulus parameters//   
/////////////////////////
MFfreq=5
NETIN_SP_START=500
SEED=1

///////////////////////////////
//uncomment gap junction flag//
//////////////////////////////
GJ=1      // with GJ between GoCs
//GJ=0      // without GJ between GoCs
GrC2GoC=1
//GrC2GoC=0

///////////////////////////
//Building Network Layers//
///////////////////////////

load_file("network.hoc") 

//////////////////////
//Running Simulation//
/////////////////////
cleanMF()      //clear MF buffers
stimulus(NETIN_SP_START, MFfreq, tmax, SEED)  //start MF stimulus

init()
tstop=DT 
run()  //run a single time step

//set vinit to randomize vrest
min=-84 
max=-56 

for i=0, NumberCellsb-1 {
  xprob=prob.uniform(min,max)
  GrC[i].setv(xprob)
}
for i=0, NumberCellsd-1 {
  xprob=prob.uniform(min,max)
  GoC[i].setv(xprob)
}

continuerun(tmax) //run the rest of simulation

//simulation finished
printf("Finished simulation\n")

/////////////////////////
//Generate Raster Plots//
/////////////////////////
objref g1
g1 = new Graph()
idvec1.mark(g1, timevec1, "|")

objref g2
g2 = new Graph()
idvec2.mark(g2, timevec2, "|")

///////////////////////
//Save Data to Files//
//////////////////////

GoCMatrixS.resize(tmax,NumberCellsd) 
GrCMatrixS.resize(tmax,NumberCellsb) 
MFMatrixS.resize(tmax,NumberCellsa) 
for i = 0, NumberCellsa-1 {
MFMatrixS.setcol(i,fiber[i].spiketimes)  
}
for i = 0, NumberCellsb-1 {
GrCMatrixS.setcol(i,GrC[i].spiketimes) 
}
for i = 0, NumberCellsd-1 {
GoCMatrixS.setcol(i,GoC[i].spiketimes)  
}

//record Vectors to File	
MFMatrixS.fprint(sav_MFMatrixS," %g")
GrCMatrixS.fprint(sav_GrCMatrixS," %g")
GoCMatrixS.fprint(sav_GoCMatrixS," %g")

//Close Files	
sav_MFMatrixS.close()
sav_GrCMatrixS.close()
sav_GoCMatrixS.close()

// Save the voltage traces of several golgi and granule cells
objref granule1_v_file, granule2_v_file, granule3_v_file, granule4_v_file, granule5_v_file
objref golgi1_v_file, golgi2_v_file, golgi3_v_file, golgi4_v_file, golgi5_v_file
granule1_v_file = new File()
granule2_v_file = new File()
granule3_v_file = new File()
granule4_v_file = new File()
granule5_v_file = new File()
granule1_v_file.wopen("Granule1.v_dat")
granule2_v_file.wopen("Granule2.v_dat")
granule3_v_file.wopen("Granule3.v_dat")
granule4_v_file.wopen("Granule4.v_dat")
granule5_v_file.wopen("Granule5.v_dat")
golgi1_v_file = new File()
golgi2_v_file = new File()
golgi3_v_file = new File()
golgi4_v_file = new File()
golgi5_v_file = new File()
golgi1_v_file.wopen("Golgi1.v_dat")
golgi2_v_file.wopen("Golgi2.v_dat")
golgi3_v_file.wopen("Golgi3.v_dat")
golgi4_v_file.wopen("Golgi4.v_dat")
golgi5_v_file.wopen("Golgi5.v_dat")
for (i=0; i < time.size(); i=i+1) {
    granule1_v_file.printf("%g %g\n", time.x[i], granule1_v.x[i])
    granule2_v_file.printf("%g %g\n", time.x[i], granule2_v.x[i])
    granule3_v_file.printf("%g %g\n", time.x[i], granule3_v.x[i])
    granule4_v_file.printf("%g %g\n", time.x[i], granule4_v.x[i])
    granule5_v_file.printf("%g %g\n", time.x[i], granule5_v.x[i])
    golgi1_v_file.printf("%g %g\n", time.x[i], golgi1_v.x[i])      
    golgi2_v_file.printf("%g %g\n", time.x[i], golgi2_v.x[i])      
    golgi3_v_file.printf("%g %g\n", time.x[i], golgi3_v.x[i])      
    golgi4_v_file.printf("%g %g\n", time.x[i], golgi4_v.x[i])      
    golgi5_v_file.printf("%g %g\n", time.x[i], golgi5_v.x[i])      
}

strdef command
sprint(command,"mv *.spikes_dat ../../output/")
system(command)
