input_freq = 10 // Must be first line of file for automatic replacement in iPython notebook function to work
nrn_load_dll("/home/tclose/kbrain/xml/cerebellum/ncml/build/neuron/Golgi_DeSouza10/install/x86_64/.libs/libnrnmech.so")
    
objref SpikeTrain, netcon, nil
objref exc[78], inh[27], synapses
objref RT_Vm, EL_Vm
objref AMPA_MossyFiber, AMPA_Granule

RT_Vm = new Vector()
EL_Vm = new Vector()
create soma
soma {
    nseg = 1
    diam = 27 // 22 pF Dieudonne98
    L = 27
    Ra = 100 // From Roth&Hausser2000
    celsius = 23

    insert Golgi_DeSouza10_ca
    insert Golgi_DeSouza10_ca2
    insert Golgi_DeSouza10_CaHVA
    insert Golgi_DeSouza10_CaLVA
    insert Golgi_DeSouza10_HCN1
    insert Golgi_DeSouza10_HCN2
    insert Golgi_DeSouza10_KA
    insert Golgi_DeSouza10_KCa
    insert Golgi_DeSouza10_KM
    insert Golgi_DeSouza10_KV
    insert Golgi_DeSouza10_Lkg
    insert Golgi_DeSouza10_Na
    insert Golgi_DeSouza10_NaP
    insert Golgi_DeSouza10_NaR
    insert Golgi_DeSouza10_SK2
    insert Golgi_DeSouza10_k
    insert Golgi_DeSouza10_na
    
    usetable_Golgi_DeSouza10_CaLVA = 0
    usetable_Golgi_DeSouza10_CaHVA = 0
    usetable_Golgi_DeSouza10_KA = 0
    usetable_Golgi_DeSouza10_KV = 0
    usetable_Golgi_DeSouza10_NaR = 0
    usetable_Golgi_DeSouza10_KM = 0
    usetable_Golgi_DeSouza10_Na = 0
    usetable_Golgi_DeSouza10_NaP = 0
    
    ena=87.39
    ek=-84.69
      
    SpikeTrain = new Vector()
    netcon = new NetCon(&v(0.5),nil)
    netcon.threshold=-20
    netcon.record(SpikeTrain)
    
    //Synapses
    
    //AMPA_MossyFiber=new Golgi_DeSouza10_AMPA_MossyFiber(0.5) //Adding synapse with rise and decay time
//    AMPA_MossyFiber.tau1=0.03  // ms rise time (Maex)
//    AMPA_MossyFiber.tau2=0.5  // ms decay time (Maex)
//    AMPA_MossyFiber.e=0     // mV reversal potential (Maex)

    AMPA_Granule=new Golgi_DeSouza10_AMPA_Granule(0.5) //Adding synapse with rise and decay time
//    AMPA_Granule.tau1=0.03  // ms rise time (Maex)
//    AMPA_Granule.tau2=0.5  // ms decay time (Maex)
//    AMPA_Granule.e=0     // mV reversal potential (Maex)
    
    RT_Vm.record(&v(0.5))
    psection()
}
    
create dend[3]
for i=0,2 {
    dend[i] {
        celsius = 23
        nseg = 10
        diam = 3
        L = 113
        Ra = 100
        celsius = 23
        
        insert Golgi_DeSouza10_Lkg
//        for k=0, 25 {
////            exc[(i*26)+k] = new Synapse(0.5)
//        }
        for k=0, 8 {
//            inh[(i*9)+k] = new Synapse(0.5)
//            inh[(i*9)+k].Erev = -60
        }
        psection()        
    }
    connect dend[i](0), soma(1) 
}  

create axon
axon {
  nseg = 4
  diam = 2.4 // gives 90 pF to get to the 145 pF Forti06
  L = 1200
  Ra = 125
  celsius = 23
  insert Golgi_DeSouza10_Lkg
}
connect axon(0), soma(0)

objref ns, nc1, nc2
if (input_freq != 0) {
  
  ns = new NetStim(0.5)
  ns.interval = 1000 / input_freq
  ns.number = input_freq * 2
  
//nc1 = new NetCon(ns, AMPA_MossyFiber)
//nc1.weight = 0.0025
  nc2 = new NetCon(ns, AMPA_Granule)
  nc2.weight = 0.0025
}

access soma    
psection()

printf("ena: %f", ena)
printf("ek: %f", ek)
printf("eca: %f", eca)
printf("celsius: %f", celsius)
objectvar stim
 
objref rec_v
rec_v = new Vector()
rec_v.record (&soma.v(0.5))

objref rec_t
rec_t = new Vector()
rec_t.record (&t)

dt = 0.025
tstop = 2000
run()

objref output_file
output_file = new File()
output_file.wopen("../../../../output/golgi_synapses.Granule.v_dat")
for (i=0; i < rec_v.size(); i=i+1) {
  output_file.printf("%g %g\n", rec_t.x[i], rec_v.x[i])
}
output_file.close()
quit()
