stim_amp=0.01875

// This is the absolute path on my machine (feel free to add your own as it doesn't hurt)
nrn_load_dll("/home/tclose/kbrain/external/original_mod/fabios_granule/x86_64/.libs/libnrnmech.so")

public soma
public x,y,z

//object variable will refer to a list that will hold an arbitrary number of NetCon objects.

public nclist
objectvar nclist  

//synapses         
public synAMPA,synNMDA,synGABAa1,synGABAa2 
objectvar synAMPA,synNMDA,synGABAa1,synGABAa2 

//counting spikes
public spiketimes,spikecount
objref spiketimes,spikecount

public voltagem
objref voltagem

tmax=1000   

create soma //create compartment

x=0
y=0
z=0

spiketimes=new Vector()
lastspikecount=0

voltagem=new Vector()

soma {

    pt3dclear()
    pt3dadd(x,y,z,10)  //set position of cell
    pt3dadd(x,y,z+10,10)
     
    nseg=1
    diam=11.8
    L=11.8 
    Ra=100
    cm=1
    celsius = 30
    
    Area = PI*soma.diam*soma.L*1e-8
    
    insert GRC_LKG1 
    insert GRC_LKG2
    insert GRC_NA 
    insert GRC_KV
    insert GRC_KA
    insert GRC_KIR 
    insert GRC_KCA 
    insert GRC_CALC
    //insert GrC_CaHVA
    insert GRC_CA
    insert GRC_KM 
    
    gl_GRC_LKG1=5.68e-5   //2009 model
    ggaba_GRC_LKG2 = 3e-05    //2009 model
    gkbar_GRC_KV= 0.003    //2009 model
    gkbar_GRC_KA = 0.0032   //2009 model
    gkbar_GRC_KIR = 0.0009  //2009 model
    gkbar_GRC_KM= 0.00025   //0.0001  //2009 model
    gnabar_GRC_NA= 0.013     //2009 model  
    gcabar_GRC_CA= 0.00046    //2009 model
    gkbar_GRC_KCA = 0.04   //ajusted Version 3
    
    beta_GRC_CALC = 1.5
    
    
    usetable_GRC_NA   = 0                 
    usetable_GRC_KV   = 0
    usetable_GRC_KA   = 0
    usetable_GRC_KIR  = 0   
    usetable_GRC_KCA  = 0
    usetable_GRC_CA   = 0
    usetable_GRC_KM   = 0
    
    ena = 87.39
    ek = -84.69
    //eca = 129.33
    ecl = -65
    
    nclist=new List()
    
    //Synapses
    synAMPA=new Exp2Syn(0.5) //Adding synapse with rise and decay time
    synAMPA.tau1=0.03  // ms rise time 
    synAMPA.tau2=0.5  // ms decay time 
    synAMPA.e=0     // mV reversal potential 
    
    synNMDA=new Exp2Syn(0.5) //Adding synapse with rise and decay time
    synNMDA.tau1=1  // ms rise time
    synNMDA.tau2=13.3  // ms decay time 
    synNMDA.e=0     // mV reversal potential 
    
    synGABAa1=new Exp2Syn(0.5) //Adding synapse with rise and decay time
    synGABAa1.tau1=0.31  // ms rise time 
    synGABAa1.tau2=8.8  // ms decay time 
    synGABAa1.e=-75     // mV reversal potential 
    
    synGABAa2=new Exp2Syn(0.5) //Adding synapse with rise and decay time
    synGABAa2.tau1=0.31  // ms rise time 
    synGABAa2.tau2=300  // ms decay time 
    synGABAa2.e=-75     // mV reversal potential 
    
    //counting spikes
    spikecount=new APCount(0.5)
    spikecount.thresh=-20
    spikecount.record(spiketimes)
    
    //Saving Vm
    voltagem.record(&v(0.5))
}


/*
 General settings
*/ 
v_init = -70

tstop = 1000 //for IClamp
dt = 0.025

secondorder=0  //method implicit backward euler

celsius = 30 
SogliaSpike=0

access soma
psection()


printf("ena: %f", ena)
printf("ek: %f", ek)
printf("eca: %f", eca)
printf("ecl: %f", ecl)
printf("celsius: %f", celsius)
objectvar stim
soma stim = new IClamp(0.5)
stim.del = 1000
stim.dur = 1000
stim.amp = stim_amp
 
objref rec_v
rec_v = new Vector()
rec_v.record (&soma.v(0.5))

objref rec_t
rec_t = new Vector()
rec_t.record (&t)

dt = 0.025
tstop = 2000
run()

objref output_file
output_file = new File()
output_file.wopen("/home/tclose/kbrain/output/single_fabios_granule_hoc.dat")
for (i=0; i < rec_v.size(); i=i+1) {
  output_file.printf("%g %g\n", rec_t.x[i], rec_v.x[i])
}
output_file.close()
quit()
