//load_file("/home/tclose/kbrain/xml/cerebellum/ncml/build/neuron/Purkinje_Khaliq03/install")
//load_file("resurgesim.hoc")

create soma
access soma

insert naRsg
insert kpkj
insert kpkj2
insert kpkjslow
insert bkpkj
insert cadiff
insert cap
insert lkpkj
insert hpkj

soma {
  L = 20
  diam = 20
  ena = 60
  ek = -88
}


objref rec_v
rec_v = new Vector()
rec_v.record (&soma.v(0.5))

objref rec_t
rec_t = new Vector()
rec_t.record (&t)

dt = 0.025
tstop = 2000
run()

objref output_file
output_file = new File()
printf("Writing output to '../../output/purkinje_khaliq03.dat'")
output_file.wopen("../../output/purkinje_khaliq03.dat")
for (i=0; i < rec_v.size(); i=i+1) {
  output_file.printf("%g %g\n", rec_t.x[i], rec_v.x[i])
}
output_file.close()